CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:Macrophages
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:Macrophages
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
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
RescaleIntensity:[module_num:6|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
    Select the input image:OrigBlue
    Name the output image:RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
SaveImages:[module_num:7|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
    Select the type of image to save:Image
    Select the image to save:OrigBlue
    Select method for constructing file names:From image filename
    Select image name for file prefix:Macrophages
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_B
    Saved file format:tiff
    Output file location:Elsewhere...|C:\\sandisk\\impact\\images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:OrigGreen
    Select method for constructing file names:From image filename
    Select image name for file prefix:Macrophages
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_G
    Saved file format:tiff
    Output file location:Elsewhere...|C:\\sandisk\\impact\\images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:9|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
    Select the type of image to save:Image
    Select the image to save:OrigRed
    Select method for constructing file names:From image filename
    Select image name for file prefix:Macrophages
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_R
    Saved file format:tiff
    Output file location:Elsewhere...|C:\\sandisk\\impact\\images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:OrigBlue
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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